<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details>This model is used to calibrate the Metroplis Kinetcis temperature and chemataxis strength to fidn what diffusion rates and drift velocity they produce.
</Details>
        <Title>worm4</Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <Size symbol="size" value="5000, 5000, 0"/>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="periodic" boundary="y"/>
            </BoundaryConditions>
            <NodeLength symbol="dx" value="0.002"/>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime symbol="tmax" value="500"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="123456"/>
        <!--    <Disabled>
        <RandomSeed value="0"/>
    </Disabled>
-->
    </Time>
    <Analysis>
        <ModelGraph include-tags="#untagged" reduced="false" format="svg"/>
        <Gnuplotter decorate="true" time-step="tmax" file-numbering="time">
            <Plot>
                <Cells/>
                <Field symbol-ref="Ua"/>
            </Plot>
            <Terminal name="png" size="2000,2000,0"/>
        </Gnuplotter>
        <Logger time-step="tmax">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="delta_r.x"/>
                <Symbol symbol-ref="delta_r.y"/>
                <Symbol symbol-ref="MKtemp"/>
                <Symbol symbol-ref="MKtime"/>
                <Symbol symbol-ref="cmstrength"/>
            </Input>
            <Output>
                <TextOutput file-format="csv" separator="comma" file-numbering="time" header="true"/>
            </Output>
        </Logger>
    </Analysis>
    <CPM>
        <Interaction>
            <Contact value="wormtoworm" type2="worm" type1="worm"/>
            <Contact value="wormtomedium" type2="medium" type1="worm"/>
        </Interaction>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration symbol="MKtime" value="0.15"/>
            <MetropolisKinetics temperature="MKtemp"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </MonteCarloSampler>
    </CPM>
    <CellTypes>
        <CellType class="biological" name="worm">
            <ConnectivityConstraint/>
            <VolumeConstraint target="cellvolume" strength="1"/>
            <MotilityReporter name="worm_motility" time-step="1000">
                <Displacement symbol-ref="delta_r"/>
                <Velocity symbol-ref="vel"/>
            </MotilityReporter>
            <PropertyVector symbol="vel" value="0.0, 0.0, 0.0"/>
            <PropertyVector symbol="delta_r" value="0.0, 0.0, 0.0"/>
            <Chemotaxis strength="cmstrength" field="Ua"/>
        </CellType>
        <CellType class="biological" name="medium"/>
    </CellTypes>
    <CellPopulations>
        <Population type="worm" size="1">
            <InitRectangle mode="regular" number-of-cells="100">
                <Dimensions origin="500,2500,0" size="10,10,1"/>
            </InitRectangle>
        </Population>
    </CellPopulations>
    <Global>
        <Constant symbol="width" name="width" value="0.2"/>
        <Constant symbol="nelements" name="nelements" value="size.x"/>
        <Constant symbol="sweep" name="sweep" value="1"/>
        <Constant symbol="MKtemp" value="10.0"/>
        <Field symbol="Ua" name="attractant" value="space.x"/>
        <Constant symbol="cmstrength" value="1.0"/>
        <Constant symbol="wormtoworm" value="0.0"/>
        <Constant symbol="wormtomedium" value="0.0"/>
        <Constant symbol="tfinal" value="500"/>
        <Constant symbol="cellvolume" value="5"/>
    </Global>
</MorpheusModel>
