<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details>Attractant+repellent Keller-Segel model, 5 mm x 5 mm. T = 10^7 s.
</Details>
        <Title>worm6e</Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <Size value="192, 192, 0" symbol="size"/>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="periodic" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="0.0026041666666666665" symbol="dx"/>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="1500"/>
        <StopTime value="10001500" symbol="tmax"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="123456"/>
        <SaveInterval value="1500" symbol="checkpoint_time"/>
    </Time>
    <Analysis>
        <ModelGraph include-tags="#untagged" format="svg" reduced="false"/>
        <Gnuplotter time-step="treport" file-numbering="time" decorate="true" name="fields">
            <Plot>
                <Cells/>
                <Field symbol-ref="V"/>
            </Plot>
            <Terminal size="2000,2000,0" name="png"/>
            <Plot>
                <Field symbol-ref="Ua"/>
            </Plot>
            <Plot>
                <Field symbol-ref="Ur"/>
            </Plot>
        </Gnuplotter>
        <Logger time-step="treport">
            <Input>
                <Symbol symbol-ref="cell.id"/>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="delta_r.x"/>
                <Symbol symbol-ref="delta_r.y"/>
                <Symbol symbol-ref="MKtemp"/>
                <Symbol symbol-ref="MKtime"/>
                <Symbol symbol-ref="cmstrength"/>
            </Input>
            <Output>
                <TextOutput separator="comma" header="true" file-numbering="time" file-format="csv" file-name="worms"/>
            </Output>
        </Logger>
        <Logger time-step="treport">
            <Input>
                <Symbol symbol-ref="space.x"/>
                <Symbol symbol-ref="space.y"/>
                <Symbol symbol-ref="Ua"/>
                <Symbol symbol-ref="Va"/>
                <Symbol symbol-ref="Ur"/>
                <Symbol symbol-ref="Vr"/>
                <Symbol symbol-ref="V"/>
            </Input>
            <Output>
                <TextOutput separator="comma" header="true" file-numbering="time" file-format="csv" file-name="UaUr"/>
            </Output>
        </Logger>
        <Gnuplotter time-step="treport" file-numbering="time" decorate="true" name="Vplot">
            <Plot>
                <Field symbol-ref="V"/>
            </Plot>
            <Terminal size="2000,2000,0" name="png"/>
            <Plot>
                <Field symbol-ref="Va"/>
            </Plot>
            <Plot>
                <Field symbol-ref="Vr"/>
            </Plot>
        </Gnuplotter>
    </Analysis>
    <CPM>
        <Interaction>
            <Contact type2="worm" value="wormtoworm" type1="worm"/>
            <Contact type2="medium" value="wormtomedium" type1="worm"/>
        </Interaction>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.15" symbol="MKtime"/>
            <MetropolisKinetics temperature="MKtemp"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </MonteCarloSampler>
    </CPM>
    <CellTypes>
        <CellType class="biological" name="worm">
            <ConnectivityConstraint/>
            <VolumeConstraint target="cellvolume" strength="1"/>
            <MotilityReporter time-step="1000" name="worm_motility">
                <Displacement symbol-ref="delta_r"/>
                <Velocity symbol-ref="vel"/>
            </MotilityReporter>
            <PropertyVector value="0.0, 0.0, 0.0" symbol="vel"/>
            <PropertyVector value="0.0, 0.0, 0.0" symbol="delta_r"/>
            <Chemotaxis strength="cmstrength" field="-V"/>
            <Property value="sa/wormvolume" symbol="gridsa"/>
            <Property value="sr/wormvolume" symbol="gridsr"/>
        </CellType>
        <CellType class="medium" name="medium">
            <PropertyVector value="0.0, 0.0, 0.0" symbol="delta_r"/>
            <PropertyVector value="0.0, 0.0, 0.0" symbol="vel"/>
            <Property value="0" symbol="gridsa"/>
            <Property value="0.0" symbol="gridsr"/>
        </CellType>
    </CellTypes>
    <CellPopulations>
        <Population type="worm" size="360">
            <InitRectangle mode="random" number-of-cells="Nworms">
                <Dimensions size="size.x, size.y, size.z" origin="0.0, 0.0, 0.0"/>
            </InitRectangle>
        </Population>
    </CellPopulations>
    <Global>
        <Constant value="1500" symbol="treport"/>
        <Constant value="size.x*dx" symbol="width" name="width"/>
        <Constant value="MKtime" symbol="dt"/>
        <Constant value="size.x" symbol="nelements" name="nelements"/>
        <Constant value="1" symbol="sweep" name="sweep"/>
        <Constant value="10.0" symbol="MKtemp"/>
        <Field value="0.0" symbol="Ua" name="attractant">
            <Diffusion rate="1e-6"/>
        </Field>
        <Field value="0.0" symbol="Ur" name="repellent">
            <Diffusion rate="1e-5"/>
        </Field>
        <Constant value="MKtemp" symbol="mu"/>
        <Constant value="mu" symbol="cmstrength"/>
        <Constant value="0.0" symbol="wormtoworm"/>
        <Constant value="0.0" symbol="wormtomedium"/>
        <Constant value="5" symbol="cellvolume"/>
        <Constant value="cellvolume*dx*dx" symbol="wormvolume"/>
        <Constant value="9000" symbol="rho_bar"/>
        <Constant value="width*width*rho_bar" symbol="Nworms"/>
        <ConstantVector value="0.0, 0.0, 0.0" symbol="delta_r"/>
        <ConstantVector value="0.0, 0.0, 0.0" symbol="vel"/>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <DiffEqn symbol-ref="Ua">
                <Expression>gridsa - gamma_a*Ua</Expression>
            </DiffEqn>
            <Constant value="0.01" symbol="gamma_a"/>
            <Rule symbol-ref="Va">
                <Expression>-beta_a*log(alpha_a + Ua)</Expression>
            </Rule>
            <Rule symbol-ref="Vaos2">
                <Expression>Va + beta_a*log(alpha_a)</Expression>
            </Rule>
            <DiffEqn symbol-ref="Ur">
                <Expression>gridsr-gamma_r*Ur</Expression>
            </DiffEqn>
            <Constant value="0.001" symbol="gamma_r"/>
            <Rule symbol-ref="Vr">
                <Expression>-beta_r*log(alpha_r + Ur)</Expression>
            </Rule>
            <Rule symbol-ref="Vros2">
                <Expression>Vr+beta_r*log(alpha_r+Ur)</Expression>
            </Rule>
            <Rule symbol-ref="V">
                <Expression>Va+Vr</Expression>
            </Rule>
            <Rule symbol-ref="Vos2">
                <Expression>Vaos2+Vros2</Expression>
            </Rule>
        </System>
        <Constant value="0.01" symbol="sa"/>
        <Constant value="5.55555e-6" symbol="s2"/>
        <Constant value="1500" symbol="alpha_a"/>
        <Constant value="2" symbol="beta_a"/>
        <Field value="-beta_a*log(alpha_a + Ua)" symbol="Va" name="Attractant potential"/>
        <Field value="Va + beta_a*log(alpha_a)" symbol="Vaos2" name="Normalized Va"/>
        <Constant value="0.001" symbol="sr"/>
        <Constant value="1500" symbol="alpha_r"/>
        <Constant value="-2" symbol="beta_r"/>
        <Field value="-beta_r*log(alpha_r+Ur)" symbol="Vr" name="Repellent Potential"/>
        <Field value="Vr+beta_r*log(alpha_r)" symbol="Vros2" name="Normalized Vr"/>
        <Field value="Va+Vr" symbol="V" name="Combined potential"/>
        <Field value="Vaos2+Vros2" symbol="Vos2" name="Normalized potential"/>
    </Global>
</MorpheusModel>
